PsychoPy2experiment version="2023.2.3"
Settings
  Audio latency priority = 0
  Audio lib = ptb
  Experiment info = {'participant': '99', 'session': '01'}
  Force stereo = False
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2023.2.3
  Window size (pixels) = [1536, 864]
  expName = 01_resting_state
  keyboardBackend = ioHub
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Routines
  Routine End
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    CodeComponent t_end
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(x=[2])

        #Clean up
        import gc
        gc.collect()  # Force garbage collection

        # Just clear the screen and wait
        win.flip()
        core.wait(2.0)
    TextComponent EndMessage
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Thank you!
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    SoundComponent thankyou
      sound = sound/thankyou.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine _04_arithmetic_instr
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    CodeComponent instr_arithmetic
      Code Type = Auto->JS
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      Begin Experiment:
        from psychopy import visual
        from psychopy import event # For event.waitKeys()
      Begin Routine:
        # Initialize components
        instructions = visual.TextStim(win,
            text="Keep subtracting 13 from the number shown. (count backwards by 13)\nType and press Enter.\nPress F1 to start.",
            height=0.03, color="white", pos=(0, -0.3), wrapWidth=1.5)  # Added wrapWidth

        # Show instructions
        instructions.draw()
        win.flip()

        # Wait for F1 key press
        event.waitKeys(keyList=['f1'])

        # Send trigger for initial instructions
        outlet.push_sample(x=[1])
  Routine _04_arithmetic_trial
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    CodeComponent code_arithmetic
      Code Type = Auto->JS
      Begin JS Routine:
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                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        /*
        Author: Robert Zsolt Kabai
        Email: kabairobert@gmail.com
        Date: May 25, 2025
        Version: 1.0.0
        License: GNU General Public License (GPLv3)*/
        current_number = Math.random.randint(1000, 1999);
        duration = stress_duration;
        last_response_time = 0;
        clock = new util.Clock();
        start_time = clock.getTime();
        total_trials = 0;
        total_correct = 0;
        total_incorrect = 0;
        response_times = [];
        screen_width = 2.0;
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      Begin Routine:
        """
        Author: Robert Zsolt Kabai
        Email: kabairobert@gmail.com
        Date: May 25, 2025
        Version: 1.0.0
        License: GNU General Public License (GPLv3)
        """
        import random

        # Initialize variables
        current_number = random.randint(1000, 1999)
        duration = stress_duration  # Total duration from Builder variable
        last_response_time = 0
        clock = core.Clock()
        start_time = clock.getTime()
        # --- Initialize cumulative stats ---
        total_trials = 0
        total_correct = 0
        total_incorrect = 0
        response_times = []

        # --- Define Screen Layout Parameters ---
        screen_width = 2.0  # Width from -1 to 1 in normalized units
        subject_proportion = 2/3  # Subject gets 2/3 of the screen
        experimenter_proportion = 1/3  # Experimenter gets 1/3 of the screen

        # Calculate section widths and positions
        subject_width = subject_proportion * screen_width  # 4/3 normalized units
        experimenter_width = experimenter_proportion * screen_width  # 2/3 normalized units
        divider_x_pos = -1 + subject_width  # 1/3 normalized units
        subject_section_center_x = -1 + (subject_width / 2)  # -1/3 normalized units
        experimenter_section_center_x = divider_x_pos + (experimenter_width / 2)  # 2/3 normalized units

        # Progress bars should take up 75% of their respective section width
        subject_bar_width = 0.75 * subject_width  # 75% of subject section width
        experimenter_bar_width = 0.75 * experimenter_width  # 75% of experimenter section width

        # --- Create Stimuli ---
        divider_line = visual.Line(
            win,
            start=(divider_x_pos, 1),
            end=(divider_x_pos, -1),
            lineColor="white",
            lineWidth=5
        )

        text_4digit_subject = visual.TextStim(
            win,
            text=str(current_number),
            pos=(subject_section_center_x, 0.2),
            height=0.1,
            color="white",
            font='Arial'
        )

        text_instruction_subject = visual.TextStim(
            win,
            text="Subtract 13",
            pos=(subject_section_center_x, 0.1),
            height=0.05,
            color="white",
            font='Arial'
        )

        speed_warning_subject = visual.TextStim(
            win,
            text="FASTER! You're Slow!",
            pos=(subject_section_center_x, 0.3),
            height=0.08,
            color="red",
            bold=True,
            italic=False,
            font='Arial'
        )

        # New experimenter speed warning text
        speed_warning_experimenter = visual.TextStim(
            win,
            text="say: FASTER!!",
            pos=(experimenter_section_center_x, 0.3),
            height=0.08,
            color="red",
            bold=True,
            italic=False,
            font='Arial'
        )

        text_correct_answer_exp = visual.TextStim(
            win,
            text="",
            pos=(experimenter_section_center_x, 0.2),
            height=0.1,
            color="white",
            font='Arial'
        )

        # Create instruction text with arrows
        wrong_instruction = visual.TextStim(
            win,
            text="← Wrong",
            pos=(experimenter_section_center_x - 0.08, 0.1),
            height=0.03,
            color="red",
            font='Arial',
            alignText='right',
            wrapWidth=experimenter_bar_width * 0.3
        )

        separator_text = visual.TextStim(
            win,
            text="|",
            pos=(experimenter_section_center_x, 0.1),
            height=0.03,
            color="white",
            font='Arial',
            alignText='center'
        )

        correct_instruction = visual.TextStim(
            win,
            text="Correct →",
            pos=(experimenter_section_center_x + 0.08, 0.1),
            height=0.03,
            color="green",
            font='Arial',
            alignText='left',
            wrapWidth=experimenter_bar_width * 0.3
        )

        # Feedback text for experimenter and participant sides
        text_exp_feedback = visual.TextStim(
            win,
            text="",
            pos=(experimenter_section_center_x, 0.0),
            height=0.07,
            color="white",
            font='Arial'
        )

        text_subject_feedback = visual.TextStim(
            win,
            text="",
            pos=(subject_section_center_x, 0.0),
            height=0.07,
            color="white",
            font='Arial'
        )

        # Subject progress bar (left 2/3 section)
        subject_progress_bar = visual.Rect(
            win,
            width=subject_bar_width,
            height=0.05,
            fillColor="white",
            lineColor=None,
            pos=(subject_section_center_x, -0.4)
        )

        # Experimenter progress bar (right 1/3 section)
        experimenter_progress_bar = visual.Rect(
            win,
            width=experimenter_bar_width,
            height=0.05,
            fillColor="white",
            lineColor=None,
            pos=(experimenter_section_center_x, -0.4)
        )

        # Time text for subject section
        time_left_text = visual.TextStim(
            win,
            text="Time left:",
            pos=(subject_section_center_x - (subject_bar_width / 2) - 0.05, -0.45),
            height=0.04,
            color="white",
            alignHoriz='left',
            font='Arial'
        )

        time_value_text = visual.TextStim(
            win,
            text="",
            pos=(subject_section_center_x - (subject_bar_width / 2) + 0.15, -0.45),
            height=0.04,
            color="white",
            alignHoriz='left',
            font='Arial'
        )

        # Time text for experimenter section
        time_left_text_exp = visual.TextStim(
            win,
            text="Time left:",
            pos=(experimenter_section_center_x - (experimenter_bar_width / 2) - 0.05, -0.45),
            height=0.04,
            color="white",
            alignHoriz='left',
            font='Arial'
        )

        time_value_text_exp = visual.TextStim(
            win,
            text="",
            pos=(experimenter_section_center_x - (experimenter_bar_width / 2) + 0.15, -0.45),
            height=0.04,
            color="white",
            alignHoriz='left',
            font='Arial'
        )

        # Main experiment loop
        while True:
            current_loop_time = clock.getTime()
            time_elapsed = current_loop_time - start_time
            time_left = duration - time_elapsed

            if time_left <= 0:
                time_left = 0
                break

            trial_start_time = current_loop_time

            if 'outlet' in globals() and outlet is not None:
                win.callOnFlip(outlet.push_sample, x=[40])

            correct_answer_for_this_trial = current_number - 13

            text_4digit_subject.text = str(current_number)
            text_correct_answer_exp.text = f"Ans: {correct_answer_for_this_trial}"
            text_exp_feedback.text = ""
            text_subject_feedback.text = ""  # Clear feedback text

            # Calculate progress ratio and update progress bars
            progress_ratio = time_left / duration

            # Update subject progress bar
            subject_current_bar_width = progress_ratio * subject_bar_width
            subject_progress_bar.width = subject_current_bar_width
            subject_progress_bar.pos = (
                subject_section_center_x - (subject_bar_width / 2) + (subject_current_bar_width / 2),
                -0.4
            )

            # Update experimenter progress bar
            experimenter_current_bar_width = progress_ratio * experimenter_bar_width
            experimenter_progress_bar.width = experimenter_current_bar_width
            experimenter_progress_bar.pos = (
                experimenter_section_center_x - (experimenter_bar_width / 2) + (experimenter_current_bar_width / 2),
                -0.4
            )

            # Update time text
            time_value_text.text = f"{max(0, int(time_left))}s"
            time_value_text_exp.text = f"{max(0, int(time_left))}s"

            responded_this_trial = False
            experimenter_response_key = None
            event.clearEvents()

            while not responded_this_trial:
                current_input_phase_time = clock.getTime()
                time_elapsed_input = current_input_phase_time - start_time
                time_left_input = duration - time_elapsed_input

                if time_left_input <= 0:
                    time_left = 0
                    break

                # Calculate progress ratio for this frame
                progress_ratio_input = time_left_input / duration

                # Update subject progress bar
                subject_current_bar_width_input = progress_ratio_input * subject_bar_width
                subject_progress_bar.width = subject_current_bar_width_input
                subject_progress_bar.pos = (
                    subject_section_center_x - (subject_bar_width / 2) + (subject_current_bar_width_input / 2),
                    -0.4
                )

                # Update experimenter progress bar
                experimenter_current_bar_width_input = progress_ratio_input * experimenter_bar_width
                experimenter_progress_bar.width = experimenter_current_bar_width_input
                experimenter_progress_bar.pos = (
                    experimenter_section_center_x - (experimenter_bar_width / 2) + (experimenter_current_bar_width_input / 2),
                    -0.4
                )

                # Update time text for both sections
                time_value_text.text = f"{max(0, int(time_left_input))}s"
                time_value_text_exp.text = f"{max(0, int(time_left_input))}s"

                # Draw all components
                text_4digit_subject.draw()
                text_instruction_subject.draw()

                # Show speed warnings if needed
                if last_response_time >= 3:
                    speed_warning_subject.draw()
                    speed_warning_experimenter.draw()  # Draw speed warning for experimenter

                text_correct_answer_exp.draw()

                # Draw the instruction text with arrows
                wrong_instruction.draw()
                separator_text.draw()
                correct_instruction.draw()

                divider_line.draw()
                subject_progress_bar.draw()
                experimenter_progress_bar.draw()
                time_left_text.draw()
                time_value_text.draw()
                time_left_text_exp.draw()
                time_value_text_exp.draw()

                win.flip()

                keys = event.getKeys(keyList=['left', 'right', 'escape'])
                if 'escape' in keys:
                    if 'outlet' in globals() and outlet is not None:
                        outlet.push_sample(x=[2])
                    core.quit()

                if 'left' in keys:
                    experimenter_response_key = 'left'
                    responded_this_trial = True
                elif 'right' in keys:
                    experimenter_response_key = 'right'
                    responded_this_trial = True

                if time_left <= 0:
                    break

            if time_left <= 0:
                break

            response_time_for_this_trial = clock.getTime() - trial_start_time

            if experimenter_response_key == 'left':
                # Update feedback for both sections
                text_exp_feedback.text = "WRONG"
                text_exp_feedback.color = "red"
                text_subject_feedback.text = "WRONG"
                text_subject_feedback.color = "red"

                # Stop sound before playing it again
                try:
                    wrong_sound.stop()  # This is critical - must stop before playing again
                    core.wait(0.01)     # Brief pause to let the stop take effect
                    wrong_sound.play()  # Now play the sound
                except Exception as e:
                    print(f"DEBUG: Error with sound: {e}")
            elif experimenter_response_key == 'right':
                # Update feedback for both sections - CORRECT
                text_exp_feedback.text = "CORRECT"
                text_exp_feedback.color = "green"
                text_subject_feedback.text = "CORRECT"
                text_subject_feedback.color = "green"

            # --- Log trial data ---
            response_correct = experimenter_response_key == 'right'
            thisExp.addData('presented_number', current_number)
            thisExp.addData('correct_answer', correct_answer_for_this_trial)
            thisExp.addData('experimenter_response', experimenter_response_key)
            thisExp.addData('response_time', response_time_for_this_trial)
            thisExp.addData('response_correct', response_correct)
            thisExp.nextEntry()
            # --- Update cumulative stats ---
            total_trials += 1
            if response_correct:
                total_correct += 1
            else:
                total_incorrect += 1
            response_times.append(response_time_for_this_trial)

            # Draw final state of this trial
            text_4digit_subject.draw()
            text_instruction_subject.draw()
            if last_response_time >= 3:
                speed_warning_subject.draw()
                speed_warning_experimenter.draw()

            text_correct_answer_exp.draw()

            # Draw the instruction text with arrows
            wrong_instruction.draw()
            separator_text.draw()
            correct_instruction.draw()

            text_exp_feedback.draw()
            text_subject_feedback.draw()

            divider_line.draw()
            subject_progress_bar.draw()
            experimenter_progress_bar.draw()
            time_left_text.draw()
            time_value_text.draw()
            time_left_text_exp.draw()
            time_value_text_exp.draw()

            win.flip()
            core.wait(0.75)

            current_number = correct_answer_for_this_trial
            last_response_time = response_time_for_this_trial

        # --- End of Experiment ---
        if 'outlet' in globals() and outlet is not None:
            outlet.push_sample(x=[2])

        # At the end of your arithmetic task
        if 'wrong_sound' in globals():
            try:
                # Stop the sound but keep the reference for later routines
                wrong_sound.stop()
                # Ensure it's fully stopped
                core.wait(0.01)
            except Exception as e:
                print(f"Error stopping wrong_sound: {e}")
                pass

        # At the end of your arithmetic task
        import gc
        gc.collect()  # Force garbage collection

        # --- Log cumulative summary stats at end ---
        if total_trials > 0:
            mean_response_time = sum(response_times) / total_trials
        else:
            mean_response_time = 0
        thisExp.addData('summary_total_trials', total_trials)
        thisExp.addData('summary_total_correct', total_correct)
        thisExp.addData('summary_total_incorrect', total_incorrect)
        thisExp.addData('summary_mean_response_time', mean_response_time)
        thisExp.nextEntry()

        # Just clear the screen and wait
        win.flip()
        core.wait(2.0)
  Routine _06_stroop_instr
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    TextComponent stroop_instr
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Stroop task
        Use the arrow keys to identify the text color. Ignore what the word says.

        Press F1 to start.
    KeyboardComponent block_resp
      allowedKeys = 'f1'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent instrText_4
      letterHeight = 0.03
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      units = height
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      text:
        red = ←, green = ↓, blue = →
        Identify the COLOR of the text. Ignore what the word says
    CodeComponent t_begin_4
      Code Type = Auto->JS
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      End Routine:
        outlet.push_sample(x=[1])
  Routine _06_stroop_trial
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    CodeComponent t_trial_stroop
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(x=[60])
    TextComponent stim
      color [set every repeat] = $wordColor
      letterHeight = 0.15
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $word
      units = height
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    KeyboardComponent resp
      allowedKeys = 'left','down','right'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = .5
      stopVal [duration (s)] = 1.0
      storeCorrect = True
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    TextboxComponent trial_counter
      bold = False
      borderColor = black
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.05
      opacity = 0.8
      pos = (0, -.4)
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $'Trial ' + str(trials.thisN+1) +'/' +str(trials.nTotal)
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    TextComponent instrText_2
      letterHeight = 0.03
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      units = height
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      text:
        red = ←, green = ↓, blue = →
        Identify the COLOR of the text. Ignore what the word says
  Routine _06_stroop_feedback
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        english_accuracy = []
        #maori_accuracy = []
      Begin Routine:
        if resp.corr:
            fb = 'Correct!'
            fbcol = 'green'
        else:
            fb = 'Incorrect'
            fbcol = 'red'
            #wrong_sound.play()  # Play the wrong answer sound
            try:
                wrong_sound.stop()  # This is critical - must stop before playing again
                core.wait(0.01)     # Brief pause to let the stop take effect
                wrong_sound.play()  # Now play the sound
            except Exception as e:
                print(f"DEBUG: Error with sound: {e}")
        # track accuracy for each condition by adding a 1 or 0 to a list
        english_accuracy.append(resp.corr)
    TextboxComponent fbtxt
      bold = False
      color [set every repeat] = $fbcol
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $fb
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    TextboxComponent trial_counter_2
      bold = False
      borderColor = black
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.05
      opacity = 0.8
      pos = (0, -.4)
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $'Trial ' + str(trials.thisN+1) +'/' +str(trials.nTotal)
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    TextComponent instrText_3
      letterHeight = 0.03
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = height
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      text:
        red = ←, green = ↓, blue = →
        Identify the COLOR of the text. Ignore what the word says
  Routine Experiment_Setup
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    CodeComponent load_data
      Code Type = Auto->JS
      Begin Experiment:
        """
        Author: Robert Zsolt Kabai
        Email: kabairobert@gmail.com
        Date: May 25, 2025
        Version: 1.0.0
        License: GNU General Public License (GPLv3)
        """

        import pandas as pd
        from psychopy import core, visual, event, sound

        # Read the Excel file
        schedule_data = pd.read_excel('participant_schedule.xlsx')

        # Get current participant and session numbers
        participant_num = int(expInfo['participant'])
        session_num = int(expInfo['session'])

        # Find the row for the current participant and session
        current_row = schedule_data[(schedule_data['participant'] == participant_num) &
                                    (schedule_data['session'] == session_num)]

        if not current_row.empty:
            # Get video filenames for the current participant and session
            interview_video = current_row['interview_video'].values[0]
            breathing_video = current_row['breathing_protocol'].values[0]

            # Store these in expInfo for easier access
            expInfo['interview_video'] = interview_video
            expInfo['breathing_video'] = breathing_video
        else:
            # Handle case where participant/session combination is not in the Excel file
            print(f"Warning: Participant {participant_num}, Session {session_num} not found in participant_schedule.xlsx")
            # Set default video filenames
            expInfo['interview_video'] = 'default_interview.mp4'
            expInfo['breathing_video'] = 'resting_state'

        instructed_breathing_instruction = " task: 6 min. \n Just follow the video for inhale and exhale, and relax. \n Press F1 to start."
        resting_state_instruction = " task: 6 min. \n Please keep looking at the cross for 6 minutes. \n Press F1 to start."

        breathing_task_text = ''
        if breathing_video == 'paced_breathing_360.mp4':
            breathing_task_text = 'Paced Breathing' + instructed_breathing_instruction
        elif breathing_video == 'fast_with_breath_hold_360.mp4':
            breathing_task_text = 'Fast Paced Breathing with Breath Hold' + instructed_breathing_instruction
        elif breathing_video == 'resting_state_360.mp4':
            breathing_task_text = 'Resting State' + resting_state_instruction
        #breathing_task_text = breathing_task_text + " task: 6 min. \n Just follow the video for inhale and exhale, and relax. \n Press F1 to start."

        # Print debug information
        print(f"Participant: {participant_num}, Session: {session_num}")
        print(f"Current row: {current_row}")
        print(f"Breathing video: {expInfo['breathing_video']}")
        print(f"Interview video: {expInfo['interview_video']}")

        # Print all data stored in expInfo
        print(f"All data in expInfo: {expInfo}")

        # Initialize the wrong answer sound
        #wrong_sound = sound.Sound('sound/wrong.wav')
        # Replace the current wrong_sound initialization with:
        wrong_sound = sound.Sound('sound/wrong.wav')
      Begin JS Experiment:
        /*
        Author: Robert Zsolt Kabai
        Email: kabairobert@gmail.com
        Date: May 25, 2025
        Version: 1.0.0
        License: GNU General Public License (GPLv3)*/
        import * as pd from 'pandas';
        import {core, event, sound, visual} from 'psychopy';
        schedule_data = pd.read_excel("participant_schedule.xlsx");
        participant_num = Number.parseInt(expInfo["participant"]);
        session_num = Number.parseInt(expInfo["session"]);
        current_row = schedule_data[((schedule_data["participant"] === participant_num) & (schedule_data["session"] === session_num))];
        if ((! current_row.empty)) {
            interview_video = current_row["interview_video"].values[0];
            breathing_video = current_row["breathing_protocol"].values[0];
            expInfo["interview_video"] = interview_video;
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    VariableComponent breath_duration
      saveStartExp = True
      startExpValue = 5
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    VariableComponent stress_duration
      startExpValue = 5
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  Routine _03_05_07_breathing_trial
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    CodeComponent t_stim_3
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(x=[int(31)])
    MovieComponent video_breath
      backend = ffpyplayer
      forceEndRoutine = False
      movie [set every repeat] = $expInfo['breathing_video']
      size = 1.78, 1.0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $breath_duration
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  Routine _03_05_07_breathing_instr
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    TextComponent text_3
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = $breathing_task_text
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    KeyboardComponent key_resp_3
      allowedKeys = 'f1'
      forceEndRoutine = True
      startVal [time (s)] = 0
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    CodeComponent t_begin_3
      Code Type = Auto->JS
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      End Routine:
        outlet.push_sample(x=[1])
  Routine _02_pubspeak_instr
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    TextComponent text_2
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Job Interview: 3 min.
        Speak as in a real interview.
        Try to speak fluently, but no "umh"  filler words!
        Every "umh" filler word will be notified!

        Press F1 to start.
    KeyboardComponent key_resp_2
      allowedKeys = 'f1'
      forceEndRoutine = True
      startVal [time (s)] = 0
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    CodeComponent t_begin_2
      Code Type = Auto->JS
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      End Routine:
        outlet.push_sample(x=[1])
  Routine _02_pubspeak_trial
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    CodeComponent t_stim_2
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(x=[int(20)])
    MovieComponent video
      backend = ffpyplayer
      forceEndRoutine = False
      movie [set every repeat] = $expInfo['interview_video']
      size = 1.78, 1.0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stress_duration
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  Routine _01_08_rest_state_instr
    RoutineSettingsComponent _01_08_rest_state_instr
      disabled = True
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    TextComponent text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Resting State task
        Please keep looking at the cross for 6 minutes
        without thinking about anything in particular.

        Press F1 to start.
    KeyboardComponent key_resp
      allowedKeys = 'f1'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent t_begin
      Code Type = Auto->JS
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      End Routine:
        outlet.push_sample(x=[1])
  Routine _01_08_rest_state_trial
    RoutineSettingsComponent _01_08_rest_state_trial
      disabled = True
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    CodeComponent t_stim
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(x=[10])
    PolygonComponent crosshair
      disabled = True
      fillColor = white
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $breath_duration
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    TextComponent cross
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $breath_duration
      text = +
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  Routine task_end_question
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    CodeComponent code_questionaire
      Code Type = Auto->JS
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      Begin Experiment:
        question_counter = 0
        question_text = 'Questionnaire #'
      Begin Routine:
        question_counter += 1
        current_letter = chr(64 + question_counter)  # 65 is ASCII for 'A'
        question_text = 'Questionnaire: ' + current_letter
    TextComponent text_question_number
      letterHeight = 0.03
      pos = 0, 0.4
      startVal [time (s)] = 0.0
      text [set every repeat] = $question_text
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    TextComponent text_q_stress
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        What is your current stress/calm level?
        (-10: as stressed as possible,  0: neutral, +10: as calm as possible)?





        What is your current cap comfort level?
        (0: super uncomfortable, 10: super comfortable)







        Press F1 to continue.
    SoundComponent exp_end_bip
      sound = sound/bip.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    KeyboardComponent key_q_stress
      allowedKeys = 'f1'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SliderComponent slider
      fillColor = 0.0000, 0.0000, 0.0000
      forceEndRoutine = True
      granularity = 1
      initVal = 0
      labels = -10, -9, -8, -7, -6, -5, -4, -3, -2, -1, 0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10
      letterHeight = 0.03
      pos = (0, 0.18)
      saveStartStop = False
      size = (1.5, 0.02)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styleTweaks = ('labels45', 'triangleMarker')
      styles = rating
      ticks = (-10, -9, -8, -7, -6, -5, -4, -3, -2, -1, 0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    SliderComponent slider2
      fillColor = 0.0000, 0.0000, 0.0000
      forceEndRoutine = True
      granularity = 1
      initVal = 5
      labels = 0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10
      letterHeight = 0.03
      pos = (0, -0.05)
      size = (1.5, 0.02)
      startVal [time (s)] = 0.0
      styleTweaks = ('labels45', 'triangleMarker')
      styles = rating
      ticks = (0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        slider.marker.size = (0.01, 0.01)
        slider2.marker.size = (0.01, 0.01)
  Routine routine_03_05_07_breathing_video
    RoutineSettingsComponent routine_03_05_07_breathing_video
      disabled = True
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    CodeComponent t_stim_3_
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(x=[int(31)])
    CodeComponent code_breathwork_vis
      Code Type = Auto->JS
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      Begin Routine:
        # Paced Breathing Visualization for PsychoPy (height units)
        # To be pasted into a code component in a PsychoPy routine
        # Note: This code assumes 'win' (window object) is already defined in the PsychoPy environment
        # IDE warnings about undefined variables can be ignored as they will be defined in the PsychoPy environment

        from psychopy import visual, core, event
        import numpy as np

        # Check which breathing protocol to use (should be defined in experiment)
        # breath_protocol should be either "paced_breathing", "fast_with_breath_hold", or "resting_state"
        breath_protocol = breathing_video  # Default value

        # Breathing settings based on protocol
        if breath_protocol == "paced_breathing":
            # Mode 1: Original paced breathing
            inhale_time = 4.5
            inhale_hold_time = 0.5
            exhale_time = 4.5
            exhale_hold_time = 0.5
            total_cycle_time = inhale_time + inhale_hold_time + exhale_time + exhale_hold_time

            # Check if breath_duration is defined in the experiment
            try:
                # Try to access breath_duration
                total_duration = breath_duration  # Use variable from experiment
            except NameError:
                # If not defined, set a default value
                total_duration = 360  # Default to 6 minutes
                print("Warning: breath_duration not defined, using default: 300 seconds")

        elif breath_protocol == "fast_with_breath_hold":
            # Mode 2: Fast breathing with holds
            # Each round: 30 rapid breaths + exhale hold + inhale hold
            fast_inhale_time = 1.5
            fast_exhale_time = 1.5
            fast_cycle_time = fast_inhale_time + fast_exhale_time
            num_fast_breaths = 30
            fast_breathing_duration = num_fast_breaths * fast_cycle_time  # 90 seconds
            exhale_hold_duration = 15
            inhale_hold_duration = 15
            round_duration = fast_breathing_duration + exhale_hold_duration + inhale_hold_duration  # 120 seconds
            num_rounds = 3

            # Use breath_duration as hard cutoff, same as paced_breathing mode
            try:
                # Try to access breath_duration
                total_duration = breath_duration  # Use variable from experiment
            except NameError:
                # If not defined, set a default value
                total_duration = 360  # Default to 6 minutes
                print("Warning: breath_duration not defined, using default: 360 seconds")

            # Define these variables for the fast_with_breath_hold mode as well
            # to prevent "referenced before assignment" errors
            inhale_time = 4.5
            inhale_hold_time = 0.5
            exhale_time = 4.5
            exhale_hold_time = 0.5
            total_cycle_time = inhale_time + inhale_hold_time + exhale_time + exhale_hold_time

        elif breath_protocol == "resting_state":
            # Mode 3: Resting state with crosshair
            # Use breath_duration as duration, same as other modes
            try:
                # Try to access breath_duration
                total_duration = breath_duration  # Use variable from experiment
            except NameError:
                # If not defined, set a default value
                total_duration = 360  # Default to 6 minutes
                print("Warning: breath_duration not defined, using default: 360 seconds")

            # Define these variables to prevent "referenced before assignment" errors
            inhale_time = 4.5
            inhale_hold_time = 0.5
            exhale_time = 4.5
            exhale_hold_time = 0.5
            total_cycle_time = inhale_time + inhale_hold_time + exhale_time + exhale_hold_time

        else:
            # Default case - treat as resting state
            print(f"Warning: Unknown breath_protocol '{breath_protocol}', defaulting to resting_state")
            breath_protocol = "resting_state"

            # Use breath_duration as duration, same as other modes
            try:
                # Try to access breath_duration
                total_duration = breath_duration  # Use variable from experiment
            except NameError:
                # If not defined, set a default value
                total_duration = 360  # Default to 6 minutes
                print("Warning: breath_duration not defined, using default: 360 seconds")

            # Define these variables to prevent "referenced before assignment" errors
            inhale_time = 4.5
            inhale_hold_time = 0.5
            exhale_time = 4.5
            exhale_hold_time = 0.5
            total_cycle_time = inhale_time + inhale_hold_time + exhale_time + exhale_hold_time

        # Get window dimensions in height units
        # In height units, the height is always 1.0 (from -0.5 to 0.5)
        # The width depends on the aspect ratio
        win_height = 1.0
        win_width = win.size[0] / win.size[1]  # This gives us the aspect ratio

        # Normalize horizontal distance to window width
        # Leave some margin on both sides (10% of width)
        margin = 0.1 * win_width
        usable_width = win_width - 2 * margin
        x_start = -win_width/2 + margin
        x_end = win_width/2 - margin

        # Vertical parameters (in height units)
        y_min = -0.25  # Bottom position for exhale
        y_max = 0.25   # Top position for inhale
        y_range = y_max - y_min

        # Create visual components based on protocol
        if breath_protocol == "resting_state":
            # For resting state, create only the crosshair (matching the original resting state routine)
            cross = visual.TextStim(
                win=win,
                name='cross',
                text='+',
                font='Open Sans',
                pos=(0, 0),
                height=0.05,
                wrapWidth=None,
                ori=0.0,
                color='white',
                colorSpace='rgb',
                opacity=None,
                languageStyle='LTR',
                depth=-1.0
            )

            # Set dummy variables for other components to prevent errors
            path_line = None
            ball = None
            background = None
            vertices = []

        else:
            # Create the breathing path line segments for paced_breathing and fast_with_breath_hold
            # Calculate segment widths based on their duration
            if breath_protocol == "paced_breathing":
                # Original path vertices for paced breathing
                inhale_width = (inhale_time / total_cycle_time) * usable_width
                inhale_hold_width = (inhale_hold_time / total_cycle_time) * usable_width
                exhale_width = (exhale_time / total_cycle_time) * usable_width
                exhale_hold_width = (exhale_hold_time / total_cycle_time) * usable_width

                vertices = [
                    [x_start, y_min],                                  # Start point
                    [x_start + inhale_width, y_max],                   # End of inhale
                    [x_start + inhale_width + inhale_hold_width, y_max],  # End of inhale hold
                    [x_start + inhale_width + inhale_hold_width + exhale_width, y_min],  # End of exhale
                    [x_end, y_min]                                     # End of exhale hold
                ]
            else:  # fast_with_breath_hold
                # For fast_with_breath_hold, we need two different path visualizations:
                # 1. Fast breathing path (first 90 seconds of each round)
                # 2. Hold phases path (last 30 seconds of each round)

                # Calculate the current phase based on time
                current_time = 0  # This will be updated in the animation loop
                round_num = int(current_time / round_duration)
                round_time = current_time - (round_num * round_duration)

                # Fast breathing path parameters
                fast_inhale_width = (fast_inhale_time / fast_cycle_time) * usable_width

                if round_time < fast_breathing_duration:
                    # Fast breathing path - just up and down, no holds
                    vertices = [
                        [x_start, y_min],                      # Start point
                        [x_start + fast_inhale_width, y_max],  # End of inhale
                        [x_end, y_min]                         # End of exhale
                    ]
                else:
                    # Hold phases path - spanning the entire usable width
                    # Define the segments of the hold cycle
                    hold_cycle_time = exhale_hold_duration + inhale_hold_duration  # 30 seconds total
                    exhale_hold_segment = 14.5  # seconds
                    inhale_transition = 0.5     # seconds
                    inhale_hold_segment = 14.5  # seconds
                    exhale_transition = 0.5     # seconds

                    # Calculate segment widths based on the entire usable width
                    exhale_hold_width = (exhale_hold_segment / hold_cycle_time) * usable_width
                    inhale_trans_width = (inhale_transition / hold_cycle_time) * usable_width
                    inhale_hold_width = (inhale_hold_segment / hold_cycle_time) * usable_width
                    exhale_trans_width = (exhale_transition / hold_cycle_time) * usable_width

                    vertices = [
                        [x_start, y_min],                                                # Start of exhale hold
                        [x_start + exhale_hold_width, y_min],                            # End of exhale hold
                        [x_start + exhale_hold_width + inhale_trans_width, y_max],       # End of inhale transition
                        [x_start + exhale_hold_width + inhale_trans_width + inhale_hold_width, y_max],  # End of inhale hold
                        [x_end, y_min]                                                   # End of exhale transition
                    ]

            # Create the path line
            path_line = visual.ShapeStim(
                win=win,
                vertices=vertices,
                closeShape=False,
                lineWidth=3,
                lineColor='white',
                opacity=0.7
            )

            # Create the ball that will travel along the path
            ball = visual.Circle(
                win=win,
                radius=0.015,  # Adjusted for height units
                fillColor='lightblue',
                lineColor='white',
                lineWidth=2
            )

            # Create background shading rectangle
            background = visual.Rect(
                win=win,
                width=win_width,
                height=y_range,
                fillColor='skyblue',
                opacity=0.2,
                pos=[0, y_min + y_range/2]  # Start at the bottom
            )

            # Set dummy variable for crosshair
            cross = None

        # Function to calculate ball position at a given time
        def get_ball_position(current_time):
            if breath_protocol == "resting_state":
                # For resting state, no ball movement needed
                return 0, 0, "Resting State"
            elif breath_protocol == "paced_breathing":
                # Define breathing parameters for paced breathing
                inhale_time = 4.5
                inhale_hold_time = 0.5
                exhale_time = 4.5
                exhale_hold_time = 0.5
                total_cycle_time = inhale_time + inhale_hold_time + exhale_time + exhale_hold_time

                # Original ball position calculation
                cycle_time = current_time % total_cycle_time

                # Calculate segment widths here to ensure they're defined
                inhale_width = (inhale_time / total_cycle_time) * usable_width
                inhale_hold_width = (inhale_hold_time / total_cycle_time) * usable_width
                exhale_width = (exhale_time / total_cycle_time) * usable_width
                exhale_hold_width = (exhale_hold_time / total_cycle_time) * usable_width

                # Determine which segment we're in
                if cycle_time < inhale_time:
                    # Inhale segment - moving up
                    progress = cycle_time / inhale_time
                    x = x_start + progress * inhale_width
                    y = y_min + progress * y_range
                    phase = "Inhale"

                elif cycle_time < inhale_time + inhale_hold_time:
                    # Inhale hold segment - staying at the top
                    progress = (cycle_time - inhale_time) / inhale_hold_time
                    x = x_start + inhale_width + progress * inhale_hold_width
                    y = y_max
                    phase = "Hold"

                elif cycle_time < inhale_time + inhale_hold_time + exhale_time:
                    # Exhale segment - moving down
                    progress = (cycle_time - inhale_time - inhale_hold_time) / exhale_time
                    x = x_start + inhale_width + inhale_hold_width + progress * exhale_width
                    y = y_max - progress * y_range
                    phase = "Exhale"

                else:
                    # Exhale hold segment - staying at the bottom
                    progress = (cycle_time - inhale_time - inhale_hold_time - exhale_time) / exhale_hold_time
                    x = x_start + inhale_width + inhale_hold_width + exhale_width + progress * exhale_hold_width
                    y = y_min
                    phase = "Hold"

            else:  # fast_with_breath_hold
                # Define breathing parameters for fast breathing with holds
                fast_inhale_time = 1.5
                fast_exhale_time = 1.5
                fast_cycle_time = fast_inhale_time + fast_exhale_time
                num_fast_breaths = 30
                fast_breathing_duration = num_fast_breaths * fast_cycle_time  # 90 seconds
                exhale_hold_duration = 15
                inhale_hold_duration = 15
                round_duration = fast_breathing_duration + exhale_hold_duration + inhale_hold_duration  # 120 seconds
                num_rounds = 3

                # Calculate which round we're in
                round_num = int(current_time / round_duration)
                if round_num >= num_rounds:
                    round_num = num_rounds - 1

                # Calculate time within the current round
                round_time = current_time - (round_num * round_duration)

                # Determine which phase we're in
                if round_time < fast_breathing_duration:
                    # Fast breathing phase
                    cycle_num = int(round_time / fast_cycle_time)
                    cycle_time = round_time % fast_cycle_time

                    # Fast breathing path parameters - ensure consistent with path creation
                    fast_inhale_width = (fast_inhale_time / fast_cycle_time) * usable_width

                    if cycle_time < fast_inhale_time:
                        # Inhale segment - moving up
                        progress = cycle_time / fast_inhale_time
                        x = x_start + progress * fast_inhale_width
                        y = y_min + progress * y_range
                        phase = "Inhale"
                    else:
                        # Exhale segment - moving down
                        progress = (cycle_time - fast_inhale_time) / fast_exhale_time
                        # Use the remaining width to ensure ball reaches end point
                        remaining_width = usable_width - fast_inhale_width
                        x = x_start + fast_inhale_width + progress * remaining_width
                        y = y_max - progress * y_range
                        phase = "Exhale"

                    # Add breath counter to phase
                    phase += f" ({cycle_num+1}/{num_fast_breaths})"

                else:
                    # Hold phases (combined exhale hold and inhale hold)
                    hold_time = round_time - fast_breathing_duration

                    # Calculate position in the hold cycle
                    hold_cycle_time = exhale_hold_duration + inhale_hold_duration  # 30 seconds total

                    # Define the segments of the hold cycle - ensure consistent with path creation
                    exhale_hold_segment = 14.5  # seconds
                    inhale_transition = 0.5     # seconds
                    inhale_hold_segment = 14.5  # seconds
                    exhale_transition = 0.5     # seconds

                    # Calculate segment widths using the entire usable width - ensure consistent with path creation
                    exhale_hold_width = (exhale_hold_segment / hold_cycle_time) * usable_width
                    inhale_trans_width = (inhale_transition / hold_cycle_time) * usable_width
                    inhale_hold_width = (inhale_hold_segment / hold_cycle_time) * usable_width
                    exhale_trans_width = (exhale_transition / hold_cycle_time) * usable_width

                    # Determine which segment of the hold cycle we're in
                    if hold_time < exhale_hold_segment:
                        # Exhale hold (bottom)
                        progress = hold_time / exhale_hold_segment
                        x = x_start + progress * exhale_hold_width
                        y = y_min
                        phase = f"Exhaled Hold ({int(exhale_hold_segment - hold_time)}s)"

                    elif hold_time < exhale_hold_segment + inhale_transition:
                        # Quick inhale transition (moving up)
                        progress = (hold_time - exhale_hold_segment) / inhale_transition
                        x = x_start + exhale_hold_width + progress * inhale_trans_width
                        y = y_min + progress * y_range
                        phase = "Inhale"

                    elif hold_time < exhale_hold_segment + inhale_transition + inhale_hold_segment:
                        # Inhale hold (top)
                        progress = (hold_time - exhale_hold_segment - inhale_transition) / inhale_hold_segment
                        x = x_start + exhale_hold_width + inhale_trans_width + progress * inhale_hold_width
                        y = y_max
                        phase = f"Inhaled Hold ({int(inhale_hold_segment - (progress * inhale_hold_segment))}s)"

                    else:
                        # Quick exhale transition (moving down)
                        progress = (hold_time - exhale_hold_segment - inhale_transition - inhale_hold_segment) / exhale_transition
                        x = x_start + exhale_hold_width + inhale_trans_width + inhale_hold_width + progress * exhale_trans_width
                        y = y_max - progress * y_range
                        phase = "Exhale"

                # Add round information
                phase = f"Round {round_num+1}/{num_rounds}: " + phase

            return x, y, phase

        # Create text display for the breathing phase
        phase_text = visual.TextStim(
            win=win,
            text="Inhale",
            pos=[0, -0.35],
            color='white',
            height=0.05  # Adjusted for height units
        )

        # Create a timer display
        timer_text = visual.TextStim(
            win=win,
            text="",
            pos=[0, 0.4],
            color='white',
            height=0.03  # Adjusted for height units
        )

        # Create breath counter rectangles for fast_with_breath_hold mode
        breath_rects = []
        round_rects = []
        if breath_protocol == "fast_with_breath_hold":
            # Calculate rectangle dimensions and positions
            rect_height = 0.05  # Height of each rectangle
            rect_width = 0.02   # Width of each rectangle
            rect_spacing = 0.005  # Space between rectangles

            # Position in right 2/3 of screen
            screen_left = -win_width/2
            screen_right = win_width/2
            left_third_end = screen_left + win_width/3

            # Calculate total width needed for all breath rectangles
            total_rect_width = num_fast_breaths * (rect_width + rect_spacing) - rect_spacing

            # Center the rectangles in the right 2/3 of the screen
            rect_area_start = left_third_end
            rect_area_end = screen_right
            rect_area_width = rect_area_end - rect_area_start

            # Start position for the first rectangle - leave space for the "Breaths:" text
            rect_start_x = left_third_end + 0.25  # Adjusted to leave space for text

            # Create all breath rectangles - initially gray with white outline
            for i in range(num_fast_breaths):
                rect = visual.Rect(
                    win=win,
                    width=rect_width,
                    height=rect_height,
                    fillColor='gray',  # Start with gray fill
                    lineColor='white',
                    lineWidth=1,
                    opacity=0.3,  # Make the gray semi-transparent
                    pos=[rect_start_x + i * (rect_width + rect_spacing), -0.4]
                )
                breath_rects.append(rect)

            # Create round counter rectangles
            # Calculate dimensions for round rectangles (slightly larger)
            round_rect_height = 0.06
            round_rect_width = 0.03
            round_rect_spacing = 0.01

            # Position round rectangles in the left 1/4 of the screen
            left_quarter_end = screen_left + win_width/4
            round_rect_start_x = left_quarter_end - 0.15  # Positioned to the left of the round text

            # Create round rectangles - initially gray with white outline
            for i in range(num_rounds):
                rect = visual.Rect(
                    win=win,
                    width=round_rect_width,
                    height=round_rect_height,
                    fillColor='gray',  # Start with gray fill
                    lineColor='white',
                    lineWidth=1,
                    opacity=0.3,  # Make the gray semi-transparent
                    pos=[round_rect_start_x + i * (round_rect_width + round_rect_spacing), -0.4]
                )
                round_rects.append(rect)

        # Create round counter text for fast_with_breath_hold mode
        round_text = None
        breaths_remaining_text = None
        if breath_protocol == "fast_with_breath_hold":
            # Round counter text - positioned at the right side of the left 1/4
            left_quarter_end = screen_left + win_width/4
            round_text = visual.TextStim(
                win=win,
                text="Round:",
                pos=[left_quarter_end - 0.35, -0.4],  # Moved further left so text ends ~2 chars before previous start
                color='white',
                height=0.05,  # Adjusted for height units
                alignHoriz='left'  # Align text to the left for consistent positioning
            )

            # Breaths remaining text - positioned before the rectangles
            breaths_remaining_text = visual.TextStim(
                win=win,
                text="Breaths:",
                pos=[left_third_end + 0.05, -0.4],  # Left side of right 2/3, moved left
                color='white',
                height=0.05,  # Adjusted for height units
                alignHoriz='left'
            )

        # Main animation loop
        timer = core.Clock()
        continue_routine = True

        try:
            while continue_routine:
                # Get current time
                t = timer.getTime()

                # Check if we've reached the total duration
                if t >= total_duration:
                    continue_routine = False
                    break

                # For fast_with_breath_hold mode, update the path visualization based on the current phase
                if breath_protocol == "fast_with_breath_hold":
                    # Define these parameters inside the loop to ensure they're available
                    fast_inhale_time = 1.5
                    fast_exhale_time = 1.5
                    fast_cycle_time = fast_inhale_time + fast_exhale_time
                    num_fast_breaths = 30
                    fast_breathing_duration = num_fast_breaths * fast_cycle_time  # 90 seconds
                    exhale_hold_duration = 15
                    inhale_hold_duration = 15
                    round_duration = fast_breathing_duration + exhale_hold_duration + inhale_hold_duration  # 120 seconds
                    num_rounds = 3

                    round_num = int(t / round_duration)
                    if round_num >= num_rounds:
                        round_num = num_rounds - 1

                    round_time = t - (round_num * round_duration)

                    # Check if we need to switch path visualization
                    is_hold_phase = round_time >= fast_breathing_duration

                    # Check if path_line exists and has vertices before accessing them
                    if hasattr(path_line, 'vertices') and len(path_line.vertices) > 0:
                        # Fast breathing path parameters
                        fast_inhale_width = (fast_inhale_time / fast_cycle_time) * usable_width

                        # Calculate hold phase parameters - using the entire usable width
                        hold_cycle_time = exhale_hold_duration + inhale_hold_duration
                        exhale_hold_segment = 14.5
                        inhale_transition = 0.5
                        inhale_hold_segment = 14.5
                        exhale_transition = 0.5

                        # Calculate segment widths using the entire usable width
                        exhale_hold_width = (exhale_hold_segment / hold_cycle_time) * usable_width
                        inhale_trans_width = (inhale_transition / hold_cycle_time) * usable_width
                        inhale_hold_width = (inhale_hold_segment / hold_cycle_time) * usable_width
                        exhale_trans_width = (exhale_transition / hold_cycle_time) * usable_width

                        # Check the current phase and update path if needed
                        if is_hold_phase and len(path_line.vertices) == 3:
                            # Switch to hold phase path - spanning the entire usable width
                            path_line.vertices = [
                                [x_start, y_min],                                                # Start of exhale hold
                                [x_start + exhale_hold_width, y_min],                            # End of exhale hold
                                [x_start + exhale_hold_width + inhale_trans_width, y_max],       # End of inhale transition
                                [x_start + exhale_hold_width + inhale_trans_width + inhale_hold_width, y_max],  # End of inhale hold
                                [x_end, y_min]                                                   # End of exhale transition
                            ]

                        elif not is_hold_phase and len(path_line.vertices) == 5:
                            # Switch back to fast breathing path
                            path_line.vertices = [
                                [x_start, y_min],
                                [x_start + fast_inhale_width, y_max],
                                [x_end, y_min]
                            ]

                # Update timer text - show remaining time
                time_left = int(total_duration - t)
                timer_text.text = f"Time remaining: {time_left}s"

                # Draw stimuli based on protocol
                if breath_protocol == "resting_state":
                    # For resting state, only draw the crosshair and timer
                    if cross:
                        cross.draw()
                    timer_text.draw()

                else:
                    # For breathing protocols, draw the breathing visualization
                    # Calculate current ball position
                    x, y, phase = get_ball_position(t)

                    # Update ball position
                    if ball:
                        ball.pos = [x, y]

                    # Update background height and position
                    if background:
                        background.height = y - y_min
                        background.pos = [0, y_min + (y - y_min)/2]

                    # Update phase text
                    phase_text.text = phase

                    # Draw breathing visualization components
                    if background:
                        background.draw()
                    if path_line:
                        path_line.draw()
                    if ball:
                        ball.draw()
                    timer_text.draw()  # Keep timer text

                    # Draw breath counter rectangles and round counter for fast_with_breath_hold mode
                    if breath_protocol == "fast_with_breath_hold":
                        # Draw round text (static "Round:" label)
                        if round_text:
                            round_text.draw()

                        # Draw breaths remaining text
                        if breaths_remaining_text:
                            breaths_remaining_text.draw()

                        # Update and draw breath rectangles
                        if breath_rects:
                            # Calculate how many breaths have been completed in the current round
                            if round_time < fast_breathing_duration:
                                completed_breaths = int(round_time / fast_cycle_time)
                            else:
                                completed_breaths = num_fast_breaths  # All breaths completed

                            # Draw all breath rectangles - advance by 1 so current breath is already filled
                            for i, rect in enumerate(breath_rects):
                                # For the current breath cycle and completed ones
                                if i <= completed_breaths:  # Changed from < to <= to include current breath
                                    # Fill current and completed breath rectangles with lightblue
                                    rect.fillColor = 'lightblue'
                                    rect.opacity = 1.0
                                else:
                                    # Keep future breath rectangles gray and semi-transparent
                                    rect.fillColor = 'gray'
                                    rect.opacity = 0.3
                                rect.draw()

                        # Update and draw round rectangles
                        if round_rects:
                            # Draw all round rectangles
                            for i, rect in enumerate(round_rects):
                                if i <= round_num:  # Fill current and previous rounds
                                    # Fill completed round rectangles with same blue as breath counter
                                    rect.fillColor = 'lightblue'
                                    rect.opacity = 1.0
                                else:
                                    # Keep future round rectangles gray and semi-transparent
                                    rect.fillColor = 'gray'
                                    rect.opacity = 0.3
                                rect.draw()
                    else:
                        # For paced_breathing mode, still show the phase text
                        phase_text.draw()

                # Check for quit (the Esc key)
                keys = event.getKeys(keyList=["escape"])
                if 'escape' in keys:
                    continue_routine = False
                    core.quit()  # This will exit the experiment

                # Refresh the screen
                win.flip()
        except Exception as e:
            print(f"Error in animation loop: {e}")
            # Handle the error appropriately for your experiment
        finally:
            # Clean up
            import gc
            gc.collect()  # Force garbage collection

        # Just clear the screen and wait
        try:
            win.flip()
            core.wait(2.0)
        except Exception as e:
            print(f"Error in final screen clear: {e}")
  Routine Trigger_setup
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    CodeComponent Trigger_setup_2
      Code Type = Auto->JS
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      Begin Experiment:
        from pylsl import StreamInfo, StreamOutlet # import required classes

        info = StreamInfo(name='Trigger',type='Markers', channel_count=1,
        channel_format='int32', source_id='Example') # sets variables for object info

        outlet = StreamOutlet(info) # initialise stream.
Flow
  Routine Trigger_setup
  Routine Experiment_Setup
  Routine _01_08_rest_state_instr
  Routine _01_08_rest_state_trial
  Routine task_end_question
  Routine _02_pubspeak_instr
  Routine _02_pubspeak_trial
  Routine task_end_question
  Routine _03_05_07_breathing_instr
  Routine _03_05_07_breathing_trial
  Routine task_end_question
  Routine _04_arithmetic_instr
  Routine _04_arithmetic_trial
  Routine task_end_question
  Routine _03_05_07_breathing_instr
  Routine _03_05_07_breathing_trial
  Routine task_end_question
  Routine _06_stroop_instr
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = english.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'word': 'red', 'wordColor': 'red', 'corrAns': 'left', 'Congruent': 1},
      {'word': 'red', 'wordColor': 'green', 'corrAns': 'down', 'Congruent': 0},
      {'word': 'red', 'wordColor': 'blue', 'corrAns': 'right', 'Congruent': 0},
      {'word': 'green', 'wordColor': 'red', 'corrAns': 'left', 'Congruent': 0},
      {'word': 'green', 'wordColor': 'green', 'corrAns': 'down', 'Congruent': 1},
      {'word': 'green', 'wordColor': 'blue', 'corrAns': 'right', 'Congruent': 0},
      {'word': 'blue', 'wordColor': 'red', 'corrAns': 'left', 'Congruent': 0},
      {'word': 'blue', 'wordColor': 'green', 'corrAns': 'down', 'Congruent': 0},
      {'word': 'blue', 'wordColor': 'blue', 'corrAns': 'right', 'Congruent': 1}]
    Routine _06_stroop_trial
    Routine _06_stroop_feedback
  LoopTerminator trials
  Routine task_end_question
  Routine _03_05_07_breathing_instr
  Routine _03_05_07_breathing_trial
  Routine task_end_question
  Routine _01_08_rest_state_instr
  Routine _01_08_rest_state_trial
  Routine task_end_question
  Routine End
