PsychoPy2experiment version="2023.2.3"
Settings
  Audio latency priority = 0
  Audio lib = ptb
  Experiment info = {'participant': '99', 'session': '01'}
  Force stereo = False
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2023.2.3
  Window size (pixels) = [1920, 1080]
  expName = 01_resting_state
  keyboardBackend = ioHub
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Routines
  Routine End
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    CodeComponent t_end
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(x=[9])

        #Clean up
        import gc
        gc.collect()  # Force garbage collection

        # Just clear the screen and wait
        win.flip()
        core.wait(2.0)
    TextComponent EndMessage
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Thank you!
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    SoundComponent thankyou
      sound = sound/thankyou.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine _04_arithmetic_instr
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    CodeComponent instr_arithmetic
      Code Type = Auto->JS
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      Begin Experiment:
        from psychopy import visual
        from psychopy import event # For event.waitKeys()
      Begin Routine:
        # Send trigger for initial instructions
        outlet.push_sample(x=[4])

        # Initialize components
        instructions = visual.TextStim(win,
            text="Keep subtracting 13 from the number shown. (count backwards by 13)\nType and press Enter.\nPress F1 to start.",
            height=0.03, color="white", pos=(0, -0.3), wrapWidth=1.5)  # Added wrapWidth

        # Show instructions
        instructions.draw()
        win.flip()

        # Wait for F1 key press
        event.waitKeys(keyList=['f1'])
  Routine _04_arithmetic_trial
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    CodeComponent code_arithmetic
      Code Type = Auto->JS
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      Begin JS Routine:
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                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        /*
        Author: Robert Zsolt Kabai
        Email: kabairobert@gmail.com
        Date: May 25, 2025
        Version: 1.0.1
        License: GNU General Public License (GPLv3)*/
        outlet.push_sample({"x": [41]});
        current_number = Math.random.randint(1000, 1999);
        duration = stress_duration;
        last_response_time = 0;
        clock = new util.Clock();
        start_time = clock.getTime();
        total_trials = 0;
        total_correct = 0;
        total_incorrect = 0;
        response_times = [];
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      Begin Routine:
        """
        Author: Robert Zsolt Kabai
        Email: kabairobert@gmail.com
        Date: May 25, 2025
        Version: 1.0.1
        License: GNU General Public License (GPLv3)
        """
        import random
        outlet.push_sample(x=[41])


        # Initialize variables
        current_number = random.randint(1000, 1999)
        duration = stress_duration  # Total duration from Builder variable
        last_response_time = 0
        clock = core.Clock()
        start_time = clock.getTime()
        # --- Initialize cumulative stats ---
        total_trials = 0
        total_correct = 0
        total_incorrect = 0
        response_times = []

        # --- Define Screen Layout Parameters ---
        screen_width = 2.0  # Width from -1 to 1 in normalized units
        subject_proportion = 2/3  # Subject gets 2/3 of the screen
        experimenter_proportion = 1/3  # Experimenter gets 1/3 of the screen

        # Calculate section widths and positions
        subject_width = subject_proportion * screen_width  # 4/3 normalized units
        experimenter_width = experimenter_proportion * screen_width  # 2/3 normalized units
        divider_x_pos = -1 + subject_width  # 1/3 normalized units
        subject_section_center_x = -1 + (subject_width / 2)  # -1/3 normalized units
        experimenter_section_center_x = divider_x_pos + (experimenter_width / 2)  # 2/3 normalized units

        # Progress bars should take up 75% of their respective section width
        subject_bar_width = 0.75 * subject_width  # 75% of subject section width
        experimenter_bar_width = 0.75 * experimenter_width  # 75% of experimenter section width

        # --- Create Stimuli ---
        divider_line = visual.Line(
            win,
            start=(divider_x_pos, 1),
            end=(divider_x_pos, -1),
            lineColor="white",
            lineWidth=5
        )

        text_4digit_subject = visual.TextStim(
            win,
            text=str(current_number),
            pos=(subject_section_center_x, 0.2),
            height=0.1,
            color="white",
            font='Arial'
        )

        text_instruction_subject = visual.TextStim(
            win,
            text="Subtract 13",
            pos=(subject_section_center_x, 0.1),
            height=0.05,
            color="white",
            font='Arial'
        )

        speed_warning_subject = visual.TextStim(
            win,
            text="FASTER! You're Slow!",
            pos=(subject_section_center_x, 0.3),
            height=0.08,
            color="red",
            bold=True,
            italic=False,
            font='Arial'
        )

        # New experimenter speed warning text
        speed_warning_experimenter = visual.TextStim(
            win,
            text="say: FASTER!!",
            pos=(experimenter_section_center_x, 0.3),
            height=0.08,
            color="red",
            bold=True,
            italic=False,
            font='Arial'
        )

        text_correct_answer_exp = visual.TextStim(
            win,
            text="",
            pos=(experimenter_section_center_x, 0.2),
            height=0.1,
            color="white",
            font='Arial'
        )

        # Create instruction text with arrows
        wrong_instruction = visual.TextStim(
            win,
            text="← Wrong",
            pos=(experimenter_section_center_x - 0.08, 0.1),
            height=0.03,
            color="red",
            font='Arial',
            alignText='right',
            wrapWidth=experimenter_bar_width * 0.3
        )

        separator_text = visual.TextStim(
            win,
            text="|",
            pos=(experimenter_section_center_x, 0.1),
            height=0.03,
            color="white",
            font='Arial',
            alignText='center'
        )

        correct_instruction = visual.TextStim(
            win,
            text="Correct →",
            pos=(experimenter_section_center_x + 0.08, 0.1),
            height=0.03,
            color="green",
            font='Arial',
            alignText='left',
            wrapWidth=experimenter_bar_width * 0.3
        )

        # Feedback text for experimenter and participant sides
        text_exp_feedback = visual.TextStim(
            win,
            text="",
            pos=(experimenter_section_center_x, 0.0),
            height=0.07,
            color="white",
            font='Arial'
        )

        text_subject_feedback = visual.TextStim(
            win,
            text="",
            pos=(subject_section_center_x, 0.0),
            height=0.07,
            color="white",
            font='Arial'
        )

        # Subject progress bar (left 2/3 section)
        subject_progress_bar = visual.Rect(
            win,
            width=subject_bar_width,
            height=0.05,
            fillColor="white",
            lineColor=None,
            pos=(subject_section_center_x, -0.4)
        )

        # Experimenter progress bar (right 1/3 section)
        experimenter_progress_bar = visual.Rect(
            win,
            width=experimenter_bar_width,
            height=0.05,
            fillColor="white",
            lineColor=None,
            pos=(experimenter_section_center_x, -0.4)
        )

        # Time text for subject section
        time_left_text = visual.TextStim(
            win,
            text="Time left:",
            pos=(subject_section_center_x - (subject_bar_width / 2) - 0.05, -0.45),
            height=0.04,
            color="white",
            alignHoriz='left',
            font='Arial'
        )

        time_value_text = visual.TextStim(
            win,
            text="",
            pos=(subject_section_center_x - (subject_bar_width / 2) + 0.15, -0.45),
            height=0.04,
            color="white",
            alignHoriz='left',
            font='Arial'
        )

        # Time text for experimenter section
        time_left_text_exp = visual.TextStim(
            win,
            text="Time left:",
            pos=(experimenter_section_center_x - (experimenter_bar_width / 2) - 0.05, -0.45),
            height=0.04,
            color="white",
            alignHoriz='left',
            font='Arial'
        )

        time_value_text_exp = visual.TextStim(
            win,
            text="",
            pos=(experimenter_section_center_x - (experimenter_bar_width / 2) + 0.15, -0.45),
            height=0.04,
            color="white",
            alignHoriz='left',
            font='Arial'
        )

        # Trigger for start of task
        # if 'outlet' in globals() and outlet is not None:
        #     outlet.push_sample(x=[41])

        # Main loop for task
        while True:
            current_loop_time = clock.getTime()
            time_elapsed = current_loop_time - start_time
            time_left = duration - time_elapsed

            if time_left <= 0:
                time_left = 0
                break

            trial_start_time = current_loop_time

            # if 'outlet' in globals() and outlet is not None:
            #     win.callOnFlip(outlet.push_sample, x=[41])

            correct_answer_for_this_trial = current_number - 13

            text_4digit_subject.text = str(current_number)
            text_correct_answer_exp.text = f"Ans: {correct_answer_for_this_trial}"
            text_exp_feedback.text = ""
            text_subject_feedback.text = ""  # Clear feedback text

            # Calculate progress ratio and update progress bars
            progress_ratio = time_left / duration

            # Update subject progress bar
            subject_current_bar_width = progress_ratio * subject_bar_width
            subject_progress_bar.width = subject_current_bar_width
            subject_progress_bar.pos = (
                subject_section_center_x - (subject_bar_width / 2) + (subject_current_bar_width / 2),
                -0.4
            )

            # Update experimenter progress bar
            experimenter_current_bar_width = progress_ratio * experimenter_bar_width
            experimenter_progress_bar.width = experimenter_current_bar_width
            experimenter_progress_bar.pos = (
                experimenter_section_center_x - (experimenter_bar_width / 2) + (experimenter_current_bar_width / 2),
                -0.4
            )

            # Update time text
            time_value_text.text = f"{max(0, int(time_left))}s"
            time_value_text_exp.text = f"{max(0, int(time_left))}s"

            responded_this_trial = False
            experimenter_response_key = None
            event.clearEvents()

            while not responded_this_trial:
                current_input_phase_time = clock.getTime()
                time_elapsed_input = current_input_phase_time - start_time
                time_left_input = duration - time_elapsed_input

                if time_left_input <= 0:
                    time_left = 0
                    break

                # Calculate progress ratio for this frame
                progress_ratio_input = time_left_input / duration

                # Update subject progress bar
                subject_current_bar_width_input = progress_ratio_input * subject_bar_width
                subject_progress_bar.width = subject_current_bar_width_input
                subject_progress_bar.pos = (
                    subject_section_center_x - (subject_bar_width / 2) + (subject_current_bar_width_input / 2),
                    -0.4
                )

                # Update experimenter progress bar
                experimenter_current_bar_width_input = progress_ratio_input * experimenter_bar_width
                experimenter_progress_bar.width = experimenter_current_bar_width_input
                experimenter_progress_bar.pos = (
                    experimenter_section_center_x - (experimenter_bar_width / 2) + (experimenter_current_bar_width_input / 2),
                    -0.4
                )

                # Update time text for both sections
                time_value_text.text = f"{max(0, int(time_left_input))}s"
                time_value_text_exp.text = f"{max(0, int(time_left_input))}s"

                # Draw all components
                text_4digit_subject.draw()
                text_instruction_subject.draw()

                # Show speed warnings if needed
                if last_response_time >= 3:
                    speed_warning_subject.draw()
                    speed_warning_experimenter.draw()  # Draw speed warning for experimenter

                text_correct_answer_exp.draw()

                # Draw the instruction text with arrows
                wrong_instruction.draw()
                separator_text.draw()
                correct_instruction.draw()

                divider_line.draw()
                subject_progress_bar.draw()
                experimenter_progress_bar.draw()
                time_left_text.draw()
                time_value_text.draw()
                time_left_text_exp.draw()
                time_value_text_exp.draw()

                win.flip()

                keys = event.getKeys(keyList=['left', 'right', 'escape'])
                if 'escape' in keys:
                    if 'outlet' in globals() and outlet is not None:
                        outlet.push_sample(x=[2]) # Trigger for early exit
                    core.quit()

                if 'left' in keys:
                    experimenter_response_key = 'left'
                    responded_this_trial = True
                elif 'right' in keys:
                    experimenter_response_key = 'right'
                    responded_this_trial = True

                if time_left <= 0:
                    break

            if time_left <= 0:
                break

            response_time_for_this_trial = clock.getTime() - trial_start_time

            if experimenter_response_key == 'left':
                # Update feedback for both sections
                text_exp_feedback.text = "WRONG"
                text_exp_feedback.color = "red"
                text_subject_feedback.text = "WRONG"
                text_subject_feedback.color = "red"

                # Stop sound before playing it again
                try:
                    wrong_sound.stop()  # This is critical - must stop before playing again
                    core.wait(0.01)     # Brief pause to let the stop take effect
                    wrong_sound.play()  # Now play the sound
                except Exception as e:
                    print(f"DEBUG: Error with sound: {e}")
            elif experimenter_response_key == 'right':
                # Update feedback for both sections - CORRECT
                text_exp_feedback.text = "CORRECT"
                text_exp_feedback.color = "green"
                text_subject_feedback.text = "CORRECT"
                text_subject_feedback.color = "green"

            # --- Log trial data ---
            response_correct = experimenter_response_key == 'right'
            thisExp.addData('presented_number', current_number)
            thisExp.addData('correct_answer', correct_answer_for_this_trial)
            thisExp.addData('experimenter_response', experimenter_response_key)
            thisExp.addData('response_time', response_time_for_this_trial)
            thisExp.addData('response_correct', response_correct)
            thisExp.nextEntry()
            # --- Update cumulative stats ---
            total_trials += 1
            if response_correct:
                total_correct += 1
            else:
                total_incorrect += 1
            response_times.append(response_time_for_this_trial)

            # Draw final state of this trial
            text_4digit_subject.draw()
            text_instruction_subject.draw()
            if last_response_time >= 3:
                speed_warning_subject.draw()
                speed_warning_experimenter.draw()

            text_correct_answer_exp.draw()

            # Draw the instruction text with arrows
            wrong_instruction.draw()
            separator_text.draw()
            correct_instruction.draw()

            text_exp_feedback.draw()
            text_subject_feedback.draw()

            divider_line.draw()
            subject_progress_bar.draw()
            experimenter_progress_bar.draw()
            time_left_text.draw()
            time_value_text.draw()
            time_left_text_exp.draw()
            time_value_text_exp.draw()

            win.flip()
            core.wait(0.75)

            current_number = correct_answer_for_this_trial
            last_response_time = response_time_for_this_trial


        # Trigger for end of task
        if 'outlet' in globals() and outlet is not None:
            outlet.push_sample(x=[49])

        # At the end of your arithmetic task
        if 'wrong_sound' in globals():
            try:
                # Stop the sound but keep the reference for later routines
                wrong_sound.stop()
                # Ensure it's fully stopped
                core.wait(0.01)
            except Exception as e:
                print(f"Error stopping wrong_sound: {e}")
                pass

        # At the end of your arithmetic task
        import gc
        gc.collect()  # Force garbage collection

        # --- Log cumulative summary stats at end ---
        if total_trials > 0:
            mean_response_time = sum(response_times) / total_trials
        else:
            mean_response_time = 0
        thisExp.addData('summary_total_trials', total_trials)
        thisExp.addData('summary_total_correct', total_correct)
        thisExp.addData('summary_total_incorrect', total_incorrect)
        thisExp.addData('summary_mean_response_time', mean_response_time)
        thisExp.nextEntry()

        # Just clear the screen and wait
        win.flip()
        core.wait(2.0)
      End Routine:
        outlet.push_sample(x=[49])
  Routine Experiment_Setup
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    CodeComponent load_data
      Code Type = Auto->JS
      Begin Experiment:
        """
        Author: Robert Zsolt Kabai
        Email: kabairobert@gmail.com
        Date: May 25, 2025
        Version: 1.0.0
        License: GNU General Public License (GPLv3)
        """

        import pandas as pd
        from psychopy import core, visual, event, sound

        # Read the Excel file
        schedule_data = pd.read_excel('participant_schedule.xlsx')

        # Get current participant and session numbers
        participant_num = int(expInfo['participant'])
        session_num = int(expInfo['session'])

        # Find the row for the current participant and session
        current_row = schedule_data[(schedule_data['participant'] == participant_num) &
                                    (schedule_data['session'] == session_num)]

        if not current_row.empty:
            # Get video filenames for the current participant and session
            interview_video = current_row['interview_video'].values[0]
            breathing_video = current_row['breathing_protocol'].values[0]

            # Store these in expInfo for easier access
            expInfo['interview_video'] = interview_video
            expInfo['breathing_video'] = breathing_video
        else:
            # Handle case where participant/session combination is not in the Excel file
            print(f"Warning: Participant {participant_num}, Session {session_num} not found in participant_schedule.xlsx")
            # Set default video filenames
            expInfo['interview_video'] = 'default_interview.mp4'
            expInfo['breathing_video'] = 'resting_state'

        instructed_breathing_instruction = " task: 6 min. \n Just follow the video for inhale and exhale, and relax. \n Press F1 to start."
        resting_state_instruction = " task: 6 min. \n Please keep looking at the cross for 6 minutes. \n Press F1 to start."

        breathing_task_text = ''
        if breathing_video == 'paced_breathing_360.mp4':
            breathing_task_text = 'Paced Breathing' + instructed_breathing_instruction
        elif breathing_video == 'fast_with_breath_hold_360.mp4':
            breathing_task_text = 'Fast Paced Breathing with Breath Hold' + instructed_breathing_instruction
        elif breathing_video == 'resting_state_360.mp4':
            breathing_task_text = 'Resting State' + resting_state_instruction
        #breathing_task_text = breathing_task_text + " task: 6 min. \n Just follow the video for inhale and exhale, and relax. \n Press F1 to start."

        # Print debug information
        print(f"Participant: {participant_num}, Session: {session_num}")
        print(f"Current row: {current_row}")
        print(f"Breathing video: {expInfo['breathing_video']}")
        print(f"Interview video: {expInfo['interview_video']}")

        # Print all data stored in expInfo
        print(f"All data in expInfo: {expInfo}")

        # Initialize the wrong answer sound
        #wrong_sound = sound.Sound('sound/wrong.wav')
        # Replace the current wrong_sound initialization with:
        wrong_sound = sound.Sound('sound/wrong.wav')
      Begin JS Experiment:
        /*
        Author: Robert Zsolt Kabai
        Email: kabairobert@gmail.com
        Date: May 25, 2025
        Version: 1.0.0
        License: GNU General Public License (GPLv3)*/
        import * as pd from 'pandas';
        import {core, event, sound, visual} from 'psychopy';
        schedule_data = pd.read_excel("participant_schedule.xlsx");
        participant_num = Number.parseInt(expInfo["participant"]);
        session_num = Number.parseInt(expInfo["session"]);
        current_row = schedule_data[((schedule_data["participant"] === participant_num) & (schedule_data["session"] === session_num))];
        if ((! current_row.empty)) {
            interview_video = current_row["interview_video"].values[0];
            breathing_video = current_row["breathing_protocol"].values[0];
            expInfo["interview_video"] = interview_video;
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    VariableComponent breath_duration
      saveStartExp = True
      startExpValue = 5
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    VariableComponent stress_duration
      startExpValue = 5
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  Routine _03_05_07_breathing_trial
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    CodeComponent t_stim_3
      Code Type = Auto->JS
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      Begin Experiment:
        breathing_counter = 10
      Begin Routine:
        breathing_counter += 20
        outlet.push_sample(x=[int(breathing_counter)+1])
      End Routine:
        outlet.push_sample(x=[int(breathing_counter+9)])
    MovieComponent video_breath
      backend = ffpyplayer
      forceEndRoutine = False
      movie [set every repeat] = $expInfo['breathing_video']
      size = 1.78, 1.0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $breath_duration
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  Routine _03_05_07_breathing_instr
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    TextComponent text_3
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = $breathing_task_text
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    KeyboardComponent key_resp_3
      allowedKeys = 'f1'
      forceEndRoutine = True
      startVal [time (s)] = 0
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    CodeComponent t_begin_3
      Code Type = Auto->JS
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      Begin Experiment:
        breathing_instr_counter = 1
      Begin Routine:
        breathing_instr_counter += 2
        outlet.push_sample(x=[int(breathing_instr_counter)])
  Routine _01_08_rest_state_instr
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    TextComponent text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Resting State task
        Please keep looking at the cross for 6 minutes
        without thinking about anything in particular.

        Press F1 to start.
    KeyboardComponent key_resp
      allowedKeys = 'f1'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent t_begin
      Code Type = Auto->JS
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      Begin Experiment:
        rest_state_instr_counter = -6
      Begin Routine:
        rest_state_instr_counter += 7
        outlet.push_sample(x=[rest_state_instr_counter])
  Routine _01_08_rest_state_trial
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    CodeComponent t_stim
      Code Type = Auto->JS
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      Begin Experiment:
        rest_state_counter = -60
      Begin Routine:
        rest_state_counter += 70
        outlet.push_sample(x=[rest_state_counter+1])
      End Routine:
        outlet.push_sample(x=[rest_state_counter+9])
    PolygonComponent crosshair
      disabled = True
      fillColor = white
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $breath_duration
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    TextComponent cross
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $breath_duration
      text = +
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  Routine task_end_question
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    CodeComponent code_questionaire
      Code Type = Auto->JS
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      Begin Experiment:
        question_counter = 0
        question_text = 'Questionnaire #'
      Begin Routine:
        question_counter += 1
        current_letter = chr(64 + question_counter)  # 65 is ASCII for 'A'
        question_text = 'Questionnaire: ' + current_letter

        outlet.push_sample(x=[100+question_counter])
      End Routine:
        outlet.push_sample(x=[199])
    TextComponent text_question_number
      letterHeight = 0.03
      pos = 0, 0.4
      startVal [time (s)] = 0.0
      text [set every repeat] = $question_text
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    TextComponent text_q_stress
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        What is your current stress/calm level?
        (-10: as stressed as possible,  0: neutral, +10: as calm as possible)





        What is your current cap comfort level?
        (0: super uncomfortable, 10: super comfortable)







        Press F1 to continue.
    SoundComponent exp_end_bip
      sound = sound/bip.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    KeyboardComponent key_q_stress
      allowedKeys = 'f1'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SliderComponent slider
      fillColor = 0.0000, 0.0000, 0.0000
      forceEndRoutine = True
      granularity = 1
      initVal = 0
      labels = -10, -9, -8, -7, -6, -5, -4, -3, -2, -1, 0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10
      letterHeight = 0.03
      pos = (0, 0.18)
      saveStartStop = False
      size = (1.5, 0.02)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styleTweaks = ('labels45', 'triangleMarker')
      styles = rating
      ticks = (-10, -9, -8, -7, -6, -5, -4, -3, -2, -1, 0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    SliderComponent slider2
      fillColor = 0.0000, 0.0000, 0.0000
      forceEndRoutine = True
      granularity = 1
      initVal = 5
      labels = 0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10
      letterHeight = 0.03
      pos = (0, -0.05)
      size = (1.5, 0.02)
      startVal [time (s)] = 0.0
      styleTweaks = ('labels45', 'triangleMarker')
      styles = rating
      ticks = (0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        slider.marker.size = (0.01, 0.01)
        slider2.marker.size = (0.01, 0.01)
  Routine Trigger_setup
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    CodeComponent Trigger_setup_2
      Code Type = Auto->JS
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      Begin Experiment:
        from pylsl import StreamInfo, StreamOutlet # import required classes

        info = StreamInfo(name='Trigger',type='Markers', channel_count=1,
        channel_format='int32', source_id='Example') # sets variables for object info

        outlet = StreamOutlet(info) # initialise stream.
  Routine _02_stroop_instr
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    TextComponent stroop_instr
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Stroop task
        Use the arrow keys to identify the text color. Ignore what the word says.

        Press F1 to start.
    KeyboardComponent block_resp
      allowedKeys = 'f1'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent instrText_4
      letterHeight = 0.03
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      units = height
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      text:
        red = ←, green = ↓, blue = →
        Identify the COLOR of the text. Ignore what the word says
    CodeComponent t_begin_4
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(x=[2])
      End Routine:
        outlet.push_sample(x=[21])
  Routine _02_stroop_trial
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    CodeComponent t_trial_stroop
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(x=[22])
    TextComponent stim
      color [set every repeat] = $wordColor
      letterHeight = 0.15
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $word
      units = height
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    KeyboardComponent resp
      allowedKeys = 'left','down','right'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = .5
      stopVal [duration (s)] = 1.0
      storeCorrect = True
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    TextboxComponent trial_counter
      bold = False
      borderColor = black
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.05
      opacity = 0.8
      pos = (0, -.4)
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $'Trial ' + str(trials.thisN+1) +'/' +str(trials.nTotal)
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    TextComponent instrText_2
      letterHeight = 0.03
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      units = height
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      text:
        red = ←, green = ↓, blue = →
        Identify the COLOR of the text. Ignore what the word says
  Routine _02_stroop_feedback
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    CodeComponent t_feedback_stroop
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(x=[23])
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        english_accuracy = []
        #maori_accuracy = []
      Begin Routine:
        if resp.corr:
            fb = 'Correct!'
            fbcol = 'green'
        else:
            fb = 'Incorrect'
            fbcol = 'red'
            #wrong_sound.play()  # Play the wrong answer sound
            try:
                wrong_sound.stop()  # This is critical - must stop before playing again
                core.wait(0.01)     # Brief pause to let the stop take effect
                wrong_sound.play()  # Now play the sound
            except Exception as e:
                print(f"DEBUG: Error with sound: {e}")
        # track accuracy for each condition by adding a 1 or 0 to a list
        english_accuracy.append(resp.corr)
    TextboxComponent fbtxt
      bold = False
      color [set every repeat] = $fbcol
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $fb
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    TextboxComponent trial_counter_2
      bold = False
      borderColor = black
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.05
      opacity = 0.8
      pos = (0, -.4)
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $'Trial ' + str(trials.thisN+1) +'/' +str(trials.nTotal)
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    TextComponent instrText_3
      letterHeight = 0.03
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = height
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      text:
        red = ←, green = ↓, blue = →
        Identify the COLOR of the text. Ignore what the word says
  Routine _06_pubspeak_instr
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    TextComponent text_2
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Job Interview: 3 min.
        Speak as in a real interview.
        Try to speak fluently, but no "umh"  filler words!
        Every "umh" filler word will be notified!

        Press F1 to start.
    KeyboardComponent key_resp_2
      allowedKeys = 'f1'
      forceEndRoutine = True
      startVal [time (s)] = 0
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    CodeComponent t_begin_2
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(x=[6])
  Routine _06_pubspeak_trial
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    CodeComponent t_stim_2
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(x=[int(61)])
      End Routine:
        outlet.push_sample(x=[int(69)])
    MovieComponent video
      backend = ffpyplayer
      forceEndRoutine = False
      movie [set every repeat] = $expInfo['interview_video']
      size = 1.78, 1.0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stress_duration
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  Routine _02_stroop_end
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    CodeComponent t_stroop_end
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(x=[29])
Flow
  Routine Trigger_setup
  Routine Experiment_Setup
  Routine _01_08_rest_state_instr
  Routine _01_08_rest_state_trial
  Routine task_end_question
  Routine _02_stroop_instr
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = english.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'word': 'red', 'wordColor': 'red', 'corrAns': 'left', 'Congruent': 1},
      {'word': 'red', 'wordColor': 'green', 'corrAns': 'down', 'Congruent': 0},
      {'word': 'red', 'wordColor': 'blue', 'corrAns': 'right', 'Congruent': 0},
      {'word': 'green', 'wordColor': 'red', 'corrAns': 'left', 'Congruent': 0},
      {'word': 'green', 'wordColor': 'green', 'corrAns': 'down', 'Congruent': 1},
      {'word': 'green', 'wordColor': 'blue', 'corrAns': 'right', 'Congruent': 0},
      {'word': 'blue', 'wordColor': 'red', 'corrAns': 'left', 'Congruent': 0},
      {'word': 'blue', 'wordColor': 'green', 'corrAns': 'down', 'Congruent': 0},
      {'word': 'blue', 'wordColor': 'blue', 'corrAns': 'right', 'Congruent': 1}]
    Routine _02_stroop_trial
    Routine _02_stroop_feedback
  LoopTerminator trials
  Routine _02_stroop_end
  Routine task_end_question
  Routine _03_05_07_breathing_instr
  Routine _03_05_07_breathing_trial
  Routine task_end_question
  Routine _04_arithmetic_instr
  Routine _04_arithmetic_trial
  Routine task_end_question
  Routine _03_05_07_breathing_instr
  Routine _03_05_07_breathing_trial
  Routine task_end_question
  Routine _06_pubspeak_instr
  Routine _06_pubspeak_trial
  Routine task_end_question
  Routine _03_05_07_breathing_instr
  Routine _03_05_07_breathing_trial
  Routine task_end_question
  Routine _01_08_rest_state_instr
  Routine _01_08_rest_state_trial
  Routine task_end_question
  Routine End
